CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Custom
    Select the rule criteria:or (file does contain ".npy") (extension does istif)

Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:4
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{5})
    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (extension does istif)
    Metadata file location:Elsewhere...|D:\BBBC022
    Match file and image metadata:[{'Image Metadata': u'Plate', 'CSV Metadata': u'Image_Metadata_PlateID'}, {'Image Metadata': u'Site', 'CSV Metadata': u'Image_Metadata_Site'}, {'Image Metadata': u'Well', 'CSV Metadata': u'Image_Metadata_CPD_WELL_POSITION'}]
    Use case insensitive matching?:No
    Metadata file name:BBBC022_v1_image.csv
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:Images matching a rule
    Select the filtering criteria:and (file does endwith ".npy")
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'IllumPh_golgi': u'Plate', u'IllumMito': u'Plate', u'IllumER': u'Plate', u'Mito': u'Plate', u'IllumHoechst': u'Plate', u'IllumSyto': u'Plate', u'Syto': u'Plate', u'Ph_golgi': u'Plate', u'ER': u'Plate', u'Hoechst': u'Plate'}, {u'Mito': u'Well', u'Hoechst': u'Well', u'IllumMito': None, u'IllumER': None, u'Ph_golgi': u'Well', u'IllumSyto': None, u'Syto': u'Well', u'IllumPh_golgi': None, u'ER': u'Well', u'IllumHoechst': None}, {u'IllumMito': None, u'IllumPh_golgi': None, u'Hoechst': u'Site', u'IllumER': None, u'Mito': u'Site', u'IllumHoechst': None, u'IllumSyto': None, u'Syto': u'Site',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
    Image set matching method:Metadata
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    Assignments count:10
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1") (extension does istif)
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2") (extension does istif)
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3") (extension does istif)
    Name to assign these images:Syto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4") (extension does istif)
    Name to assign these images:Ph_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5") (extension does istif)
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".npy") (metadata does ChannelNumber "1")
    Name to assign these images:IllumHoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".npy") (metadata does ChannelNumber "2")
    Name to assign these images:IllumER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".npy") (metadata does ChannelNumber "3")
    Name to assign these images:IllumSyto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".npy") (metadata does ChannelNumber "4")
    Name to assign these images:IllumPh_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does endwith ".npy") (metadata does ChannelNumber "5")
    Name to assign these images:IllumMito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Site

CorrectIlluminationApply:[module_num:5|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
    Select the input image:Hoechst
    Name the output image:CorrHoechst
    Select the illumination function:IllumHoechst
    Select how the illumination function is applied:Divide
    Select the input image:ER
    Name the output image:CorrER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:Mito
    Name the output image:CorrMito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:Ph_golgi
    Name the output image:CorrPh_golgi
    Select the illumination function:IllumPh_golgi
    Select how the illumination function is applied:Divide
    Select the input image:Syto
    Name the output image:CorrSyto
    Select the illumination function:IllumSyto
    Select how the illumination function is applied:Divide

MeasureImageQuality:[module_num:6|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
    Calculate metrics for which images?:All loaded images
    Image count:1
    Scale count:6
    Threshold count:1
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    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:40
    Spatial scale for blur measurements:60
    Spatial scale for blur measurements:2
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
FlagImage:[module_num:7|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
    Hidden:2
    Hidden:5
    Name the flag's category:Metadata
    Name the flag:QCFlag_isSaturated
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_Hoechst
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_ER
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_Mito
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:.25
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_Ph_golgi
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PercentMaximal_Syto
    Flag images based on low values?:No
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    Flag images based on high values?:Yes
    Maximum value:0.25
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    Hidden:5
    Name the flag's category:Metadata
    Name the flag:QCFlag_isBlurry
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:No
    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_Hoechst
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_ER
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_Mito
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_Ph_golgi
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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    Flag is based on:Whole-image measurement
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    Which measurement?:ImageQuality_PowerLogLogSlope_Syto
    Flag images based on low values?:Yes
    Minimum value:-2.0
    Flag images based on high values?:No
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
IdentifyPrimaryObjects:[module_num:8|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
    Select the input image:CorrHoechst
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):15,120
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:2
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Two classes
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
IdentifySecondaryObjects:[module_num:9|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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrPh_golgi
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3844
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:10|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
    Select the input objects:Nuclei
    Name the objects to be identified:CellsNoEdge
    Select the method to identify the secondary objects:Propagation
    Select the input image:CorrPh_golgi
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3844
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:11|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

ExportToSpreadsheet:[module_num:12|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:test_imageQC
    Overwrite existing files without warning?:No
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