CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:315
GitHash:
ModuleCount:14
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:3
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^.*_(?P<Well>[A-P][0-9]{2})_s(?P<Site>[0-9])_w(?P<ChannelNumber>[0-9])
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    Extract metadata from:All images
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    Metadata extraction method:Extract from file/folder names
    Metadata source:Folder name
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    Regular expression to extract from folder name:(?P<Plate>[0-9]{5})
    Extract metadata from:All images
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    Metadata extraction method:Import from file
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    Extract metadata from:All images
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    Metadata file location:Elsewhere...|D:\BBBC022
    Match file and image metadata:[{'Image Metadata': u'Site', 'CSV Metadata': u'Image_Metadata_Site'}, {'Image Metadata': u'Plate', 'CSV Metadata': u'Image_Metadata_PlateID'}, {'Image Metadata': u'Well', 'CSV Metadata': u'Image_Metadata_CPD_WELL_POSITION'}]
    Use case insensitive matching?:No
    Metadata file name:BBBC022_v1_image.csv

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Match metadata:[{u'Mito': u'Plate', u'Hoechst': u'Plate', u'Ph_golgi': u'Plate', u'ER': u'Plate', u'Syto': u'Plate'}, {u'Mito': u'Well', u'Hoechst': u'Well', u'Ph_golgi': u'Well', u'ER': u'Well', u'Syto': u'Well'}, {u'Syto': u'Site', u'Mito': u'Site', u'Hoechst': u'Site', u'ER': u'Site', u'Ph_golgi': u'Site'}]
    Image set matching method:Metadata
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does ChannelNumber "1")
    Name to assign these images:Hoechst
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "2")
    Name to assign these images:ER
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "3")
    Name to assign these images:Syto
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "4")
    Name to assign these images:Ph_golgi
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does ChannelNumber "5")
    Name to assign these images:Mito
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:Plate

CorrectIlluminationCalculate:[module_num:5|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
    Select the input image:ER
    Name the output image:IllumER
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:6|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
    Select the input image:Hoechst
    Name the output image:IllumHoechst
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:7|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
    Select the input image:Mito
    Name the output image:IllumMito
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:8|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
    Select the input image:Ph_golgi
    Name the output image:IllumPh_golgi
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
CorrectIlluminationCalculate:[module_num:9|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
    Select the input image:Syto
    Name the output image:IllumSyto
    Select how the illumination function is calculated:Regular
    Dilate objects in the final averaged image?:No
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    Rescale the illumination function?:Yes
    Calculate function for each image individually, or based on all images?:All: Across cycles
    Smoothing method:Gaussian Filter
    Method to calculate smoothing filter size:Manually
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    Smoothing filter size:150
    Retain the averaged image?:No
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    Retain the dilated image?:No
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
SaveImages:[module_num:10|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
    Select the type of image to save:Image
    Select the image to save:IllumER
    Select method for constructing file names:From image filename
    Select image name for file prefix:ER
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum
    Saved file format:npy
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:11|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
    Select the type of image to save:Image
    Select the image to save:IllumHoechst
    Select method for constructing file names:From image filename
    Select image name for file prefix:Hoechst
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum
    Saved file format:npy
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:IllumMito
    Select method for constructing file names:From image filename
    Select image name for file prefix:Mito
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum
    Saved file format:npy
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:IllumPh_golgi
    Select method for constructing file names:From image filename
    Select image name for file prefix:Ph_golgi
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum
    Saved file format:npy
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:IllumSyto
    Select method for constructing file names:From image filename
    Select image name for file prefix:Syto
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_illum
    Saved file format:npy
    Output file location:Same folder as image|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Last cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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